PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  expName = untitled
  Screen = 1
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Routines
  Routine finish
    TextComponent Finale
      text = Спасибо за участие
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine practice
    CodeComponent practice_code
      Begin Experiment:
        neutral_images = [u'Images\\neutral_1.jpg', u'Images\\neutral_2.jpg']
        shuffle(neutral_images)
      Begin Routine:
        neutral_choice = None

        if practice_loop.thisN >= 1:
            neutral_choice = neutral_images.pop()
    ImageComponent practice_problem
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      image = Images\Practice_problem.png
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    KeyboardComponent practice_keyb
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent practice_neutral
      stopVal [duration (s)] = 10.0
      pos = (0, -0.4)
      startVal [condition] = practice_loop.thisN >= 1
      image [set every repeat] = $neutral_choice
      size = (0.4,0.4)
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  Routine main_event
    CodeComponent code
      Begin Experiment:
        delay_time = sample((0,10),2)

        ready_to_shine = 0
        time_to_stop = 0
      Begin Routine:
        blink = 0
        blink_time = delay #также и для дистракции оно же
        distraction = u'Начинайте считать от %d' % randint(1,10)
      End Routine:
        if 'e' == problem_control_exit.keys:
            circles.finished = True
            ready_to_shine = 0
            impacts.opacity = 0
            time_to_stop = 0


        if 'space' == problem_control_impass.keys:
            ready_to_shine = 1
            time_to_stop = 10 + delay

        if 'e' == problem_control_exit.keys and 'space' == problem_control_impass.keys:
            print u'We have a problem Huston'
      Each Frame:
        if all((blink_time <= t <= time_to_stop,ready_to_shine == 1,type==1)):
            impacts.opacity = (1,0)[blink%2]
            blink += 1
            blink_time += 1

        if t > time_to_stop:
            impacts.opacity = 0
            ready_to_shine = 0
    TextComponent impacts_distr
      text [set every repeat] = $distraction
      stopVal [condition] = ready_to_shine ==0
      pos = (0, -0.5)
      startVal [condition] = all((blink_time <= t <= time_to_stop,ready_to_shine == 1,type == 0))
      letterHeight = 0.1
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    ImageComponent this_problem
      startVal [time (s)] = 0.0
      image [set every repeat] = $problem
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    ImageComponent impacts
      opacity = 0
      color = red
      startVal [time (s)] = 0.0
      image [set every repeat] = $impact
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    KeyboardComponent problem_control_impass
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = time_to_stop
      store = first key
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    KeyboardComponent problem_control_exit
      forceEndRoutine = True
      allowedKeys = 'e'
      startVal [time (s)] = 2.0
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  Routine instruction_overall
    ImageComponent instruction_text
      startVal [time (s)] = 0.0
      image = Images\Instruction.png
      size = (1.6,1)
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    KeyboardComponent instruction_end
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instruction_problem_remind
    ImageComponent instruction_problem_reminder_text
      startVal [time (s)] = 0.0
      image = Images\instruction_problem_reminder_text.png
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    KeyboardComponent instruction_problem_reminder_keyb
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine counting
    ImageComponent counting_training_part_1
      color = $[1.000,1.000,1.000]
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      image = Images\counting_training_part_1.png
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    CodeComponent code_2
      Begin Routine:
        distraction = u'Попробуйте считать вслух начиная от %d' % randint(1,10)
    TextComponent counting_training_part_2
      wrapWidth = 1.5
      text [set every repeat] = $distraction
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent stop_counting
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instruction_problem
    ImageComponent problem_instruction_text
      startVal [time (s)] = 0.0
      image = Images\problem_instruction_text.png
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    KeyboardComponent instruction_problem_keyb
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instruction_overall
  Routine counting
  Routine instruction_problem
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine practice
  LoopTerminator practice_loop
  Routine instruction_problem_remind
  LoopInitiator problems loopType="TrialHandler"
    conditionsFile = conditions\problems.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'impact': u'Images\\Dec_hint.png', 'problem': u'Images\\Decomposition_for_expl.png'},
      {'impact': u'Images\\Rel_hint.png', 'problem': u'Images\\Relaxation_for_expl.png'}]
    LoopInitiator circles loopType="TrialHandler"
      conditionsFile = conditions\number_of_circles.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [{'lapse': 1},
        {'lapse': 2},
        {'lapse': 3},
        {'lapse': 4},
        {'lapse': 5},
        {'lapse': 6},
        {'lapse': 7},
        {'lapse': 8},
        {'lapse': 9},
        {'lapse': 10},
        {'lapse': 11},
        {'lapse': 12},
        {'lapse': 13},
        {'lapse': 14},
        {'lapse': 15},
        {'lapse': 16},
        {'lapse': 17},
        {'lapse': 18},
        {'lapse': 19},
        {'lapse': 20},
        {'lapse': 21},
        {'lapse': 22},
        {'lapse': 23},
        {'lapse': 24},
        {'lapse': 25},
        {'lapse': 26},
        {'lapse': 27},
        {'lapse': 28},
        {'lapse': 29},
        {'lapse': 30},
        {'lapse': 31},
        {'lapse': 32},
        {'lapse': 33},
        {'lapse': 34},
        {'lapse': 35},
        {'lapse': 36},
        {'lapse': 37},
        {'lapse': 38},
        {'lapse': 39},
        {'lapse': 40},
        {'lapse': 41},
        {'lapse': 42},
        {'lapse': 43},
        {'lapse': 44},
        {'lapse': 45},
        {'lapse': 46},
        {'lapse': 47},
        {'lapse': 48},
        {'lapse': 49},
        {'lapse': 50},
        {'lapse': 51},
        {'lapse': 52},
        {'lapse': 53},
        {'lapse': 54},
        {'lapse': 55},
        {'lapse': 56},
        {'lapse': 57},
        {'lapse': 58},
        {'lapse': 59},
        {'lapse': 60},
        {'lapse': 61},
        {'lapse': 62},
        {'lapse': 63},
        {'lapse': 64},
        {'lapse': 65},
        {'lapse': 66},
        {'lapse': 67},
        {'lapse': 68},
        {'lapse': 69},
        {'lapse': 70},
        {'lapse': 71},
        {'lapse': 72},
        {'lapse': 73},
        {'lapse': 74},
        {'lapse': 75},
        {'lapse': 76},
        {'lapse': 77},
        {'lapse': 78},
        {'lapse': 79},
        {'lapse': 80},
        {'lapse': 81},
        {'lapse': 82},
        {'lapse': 83},
        {'lapse': 84},
        {'lapse': 85},
        {'lapse': 86},
        {'lapse': 87},
        {'lapse': 88},
        {'lapse': 89},
        {'lapse': 90},
        {'lapse': 91},
        {'lapse': 92},
        {'lapse': 93},
        {'lapse': 94},
        {'lapse': 95},
        {'lapse': 96},
        {'lapse': 97},
        {'lapse': 98},
        {'lapse': 99},
        {'lapse': 100}]
      Routine main_event
    LoopTerminator circles
  LoopTerminator problems
  Routine finish
